#pragma rtGlobals=3		// Use modern global access method and strict wave access.

#include "C:\Users\jamesb\Documents\MIES\ACL_TabUtilities"
#include "C:\Users\jamesb\Documents\MIES\ACL_UserdataEditor"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_AmplifierInteraction"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_Analysis"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_DataAcqITC"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_DataBrowser"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_DataConfiguratorITC"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_DataManagementNew"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_ExperimentDocumentation"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_HardwareSetUp"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_Indexing"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_InitiateMIES"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_Oscilloscope"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_PanelITC"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_RepeatedAcquisition"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_TestPulse"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_WaveBuilder"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_WaveBuilderPanel"
#include "C:\Users\jamesb\Documents\MIES\TJ_MIES_WaveNoteMgmnt"